PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = vanshita-labindividual-1
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random
        if random.random() > 0.5:
            emotion_condition = 'neutral'
            corrAns = 'q'
        else:
            emotion_condition = 'emotional'
            corrAns = 'p'
      End Routine:
        trials.addData('emotion_condition', emotion_condition)
    PolygonComponent crosscue
      fillColor = white
      shape = cross
      size = (12, 12)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
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    TextComponent Worddisplay
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      text [set every repeat] = $words
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    KeyboardComponent UserResponse
      allowedKeys = 'p' , 'q'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'words': 'chair', 'corrAns': 'q'},
      {'words': 'sad', 'corrAns': 'p'},
      {'words': 'table', 'corrAns': 'q'},
      {'words': 'pen', 'corrAns': 'q'},
      {'words': 'happy', 'corrAns': 'p'},
      {'words': 'guilty', 'corrAns': 'p'},
      {'words': 'book', 'corrAns': 'q'},
      {'words': 'excitement', 'corrAns': 'p'},
      {'words': 'bottle', 'corrAns': 'q'},
      {'words': 'anger', 'corrAns': 'p'}]
    Routine trial
  LoopTerminator trials
